PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay_Discounting_Experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 88, 'future_reward': 90, 'delay': 180},
      {'reward_today': 76, 'future_reward': 67, 'delay': 54},
      {'reward_today': 34, 'future_reward': 76, 'delay': 45},
      {'reward_today': 10, 'future_reward': 30, 'delay': 99},
      {'reward_today': 2, 'future_reward': 50, 'delay': 23},
      {'reward_today': 45, 'future_reward': 76, 'delay': 76},
      {'reward_today': 48, 'future_reward': 50, 'delay': 45},
      {'reward_today': 93, 'future_reward': 130, 'delay': 90},
      {'reward_today': 16, 'future_reward': 34, 'delay': 77},
      {'reward_today': 39, 'future_reward': 67, 'delay': 55},
      {'reward_today': 45, 'future_reward': 50, 'delay': 88},
      {'reward_today': 27, 'future_reward': 45, 'delay': 33},
      {'reward_today': 29, 'future_reward': 78, 'delay': 42},
      {'reward_today': 100, 'future_reward': 140, 'delay': 67},
      {'reward_today': 67, 'future_reward': 80, 'delay': 45},
      {'reward_today': 111, 'future_reward': 140, 'delay': 12},
      {'reward_today': 56, 'future_reward': 77, 'delay': 45},
      {'reward_today': 97, 'future_reward': 100, 'delay': 76},
      {'reward_today': 76, 'future_reward': 98, 'delay': 45},
      {'reward_today': 150, 'future_reward': 171, 'delay': 28}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
    Routine trial
  LoopTerminator trials
